PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  expName = zamanalgisi_deney
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Routines
  Routine a_ilksunum
    MovieComponent a_ilkekran
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $alistirmalar
      startVal [time (s)] = 0.0
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  Routine araekran
    ImageComponent artiresmi
      image = arti.png
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.8
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    ImageComponent image
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.1
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  Routine alistirma_yonerge2
    TextComponent abaslik2
      color = blue
      letterHeight = 0.07
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent ayonerge2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bu aşamada yapmanız gereken şey mavi perdeye doğru sağdan ya da soldan hareket eden siyah karenin mavi perdenin arkasına girdikten sonra perdenin sonuna ulaştığı süreyi aklınızda tutmaktır.

        Daha sonra ekranın ortasında artı işareti (+) belirecektir. Arkasından ilk aşamada gördüğünüz uyarıcılar aynı süreyle tekrar sunulacaktır.

        Bu aşamada sizden beklenen, ilk aşamadaki uyarıcıların harekete geçme ve sona erme zamanlarını dikkate alarak uygun süreye karar vermek ve o anda “boşluk (space)” tuşuna basmaktır.

        Her bir denemede aynı uyarıcı ya da uyarıcılar iki kere karşınıza çıkmaktadır.
        Bu deneyde en önemli olan nokta, ilk aşamada uyarıcı ya da uyarıcıların görülme süresini akılda tutarak (tahmin ederek) ikinci aşamada buna uygun tepki vermektir.

        İkinci aşamada siz tuşa basana kadar bir sonraki denemeye geçilmeyecektir.
        Herhangi bir sorunuz yok ise boşluk tuşuna basarak alıştırmaları başlatabilirsiniz.
    TextComponent devam2
      color = red
      letterHeight = 0.06
      pos = (0, -0.9)
      startVal [time (s)] = 1
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      text:
                                     Hazırsanız,
        devam etmek için 'Boşluk(space)' tuşuna basınız.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine a_bitis
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Alıştırma uygulaması sona erdi.
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine giris
    TextComponent text_2
      letterHeight = 0.1
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      text = Hazır olduğunda 'boşluk' tuşuna bas
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent nokta_
      image = nokta.png
      startVal [time (s)] = 0.1
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  Routine deney_yonerge
    TextComponent baslik
      color = blue
      letterHeight = 0.07
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = DENEY YÖNERGESİ
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    TextComponent yonerge
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Deney boyunca ekranın ortasında mavi bir perde görünecektir. Bazen mavi perdenin sağ tarafından bazen de sol tarafından siyah renkli bir kare perdeye doğru hareket edecek, kimi zaman da sadece mavi perde görünecektir. Daha sonra ekranın ortasında artı işareti (+) belirecek, sonrasında ilk aşamada gördüğünüz uyarıcı tekrar sunulacaktır.

        Bu deneyde sizden istenen, ilk aşamada sadece mavi perdeyi gördüyseniz, ikinci sunumunda ilk sunumda ekranda kaldığı kadar süre geçtiğinde 'space' tuşuna basarak diğer aşamaya geçmenizdir.

        İlk aşamada mavi perdeye doğru sağdan veya soldan hareket eden siyah kare gördüyseniz, İkinci aşamada siyah kare mavi perdenin arkasına girdikten sonra karenin sona ulaştığını düşündüğünüz anda 'space' tuşuna basınız.


        Hadi deneye geçelim!
    TextComponent hazirim
      color = red
      letterHeight = 0.06
      pos = (0, -0.9)
      startVal [time (s)] = 1
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      text:
                                     Hazırsanız,
        devam etmek için 'Boşluk(space)' tuşuna basınız.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bitir
    TextComponent finito
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      text = bitti :)
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent finito2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        katılımınız için teşekkür ederiz!
  Routine a_uyaricisunum
    MovieComponent a_uyaricilar
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $alistirmalar
      startVal [time (s)] = 0.0
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    ImageComponent a_perde
      image = perde.png
      startVal [time (s)] = 0.0
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    KeyboardComponent a_tepki
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine a_giris
    TextComponent text
      letterHeight = 0.1
      pos = (0, -0.9)
      startVal [time (s)] = 0.2
      text = Hazır olduğunda 'boşluk' tuşuna bas
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_2
      image = nokta.png
      startVal [time (s)] = 0.1
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  Routine uyarici_sunum
    MovieComponent uyarici_seti
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $uyaricilar
      startVal [time (s)] = 0.0
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    ImageComponent perde
      image = perde.png
      startVal [time (s)] = 0.0
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    KeyboardComponent tepsi_suresi
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine alistirma_yonerge
    TextComponent abaslik
      color = blue
      letterHeight = 0.07
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      text = ALIŞTIRMA YÖNERGESİ
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    TextComponent ayonerge
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Alıştırma denemeleriyle başlayacağız.

        Deneme ekranın merkezinde bulunan bir artı işareti ile başlayacaktır.
        Daha sonra ekranın ortasında uyarıcı ya da uyarıcılar görünecektir.

        Bu uyarıcılardan bir tanesi mavi bir perdedir, diğeri ise siyah bir karedir.

        Bu uyarıcılar üç şekilde karşınıza çıkabilir:

            1) Mavi perdenin sağ tarafından siyah renkli bir kare perdeye doğru hareket edecektir.
            2) Mavi perdenin sol tarafından siyah renkli bir kare perdeye doğru hareket edecektir.
            3) Sadece mavi perde görünecektir.
    TextComponent devam
      color = red
      letterHeight = 0.06
      pos = (0, -0.9)
      startVal [time (s)] = 1
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      text:
                                     Hazırsanız,
        devam etmek için 'Boşluk(space)' tuşuna basınız.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ilksunum
    MovieComponent ilkekran
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $uyaricilar
      startVal [time (s)] = 0.0
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  Routine a_araekran
    ImageComponent a_artiresmi
      image = arti.png
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.8
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    ImageComponent image_3
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 1.1
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Flow
  Routine alistirma_yonerge
  Routine alistirma_yonerge2
  LoopInitiator alistirma_loop loopType="TrialHandler"
    conditionsFile = alistirma.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([(u'alistirmalar', u'a_sag_4000.mp4')]),
      OrderedDict([(u'alistirmalar', u'a_sol_4000.mp4')]),
      OrderedDict([(u'alistirmalar', u'a_notr_2000.mp4')]),
      OrderedDict([(u'alistirmalar', u'a_sag_4000.mp4')]),
      OrderedDict([(u'alistirmalar', u'a_sol_4000.mp4')]),
      OrderedDict([(u'alistirmalar', u'a_notr_2000.mp4')])]
    Routine a_giris
    Routine a_ilksunum
    Routine a_araekran
    Routine a_uyaricisunum
  LoopTerminator alistirma_loop
  Routine a_bitis
  Routine deney_yonerge
  LoopInitiator deney_loop loopType="TrialHandler"
    conditionsFile = uyaricilar.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([(u'uyaricilar', u'v1_sag_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_1000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_1000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_1000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_1500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_1500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_1500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_1000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_1000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_1000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_1500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_1500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_1500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_500.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_notr_2000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sag_1000.mp4')]),
      OrderedDict([(u'uyaricilar', u'v1_sol_1000.mp4')])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
    Routine giris
    Routine ilksunum
    Routine araekran
    Routine uyarici_sunum
  LoopTerminator deney_loop
  Routine bitir
